PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [800,400]
  expName = friday16
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = circle
      size = (10,10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    TextComponent text
      color [set every repeat] = $colour
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys = 'r','b','y','g'
      correctAns = $correct_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine ins
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = welcome
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  Routine thanks
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank you
      units = pix
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Flow
  Routine ins
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stroop.csv
    loopType = random
    nReps = 100
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    conditions:
      [OrderedDict([('word', 'RED'), ('colour', 'red'), ('stim_resp', 'C'), ('correct_resp', 'r')]),
      OrderedDict([('word', 'RED'), ('colour', 'blue'), ('stim_resp', 'I'), ('correct_resp', 'b')]),
      OrderedDict([('word', 'BLUE'), ('colour', 'red'), ('stim_resp', 'I'), ('correct_resp', 'r')]),
      OrderedDict([('word', 'BLUE'), ('colour', 'blue'), ('stim_resp', 'C'), ('correct_resp', 'b')]),
      OrderedDict([('word', 'YELLOW'), ('colour', 'yellow'), ('stim_resp', 'C'), ('correct_resp', 'y')]),
      OrderedDict([('word', 'YELLOW'), ('colour', 'green'), ('stim_resp', 'I'), ('correct_resp', 'g')]),
      OrderedDict([('word', 'GREEN'), ('colour', 'yellow'), ('stim_resp', 'I'), ('correct_resp', 'y')]),
      OrderedDict([('word', 'GREEN'), ('colour', 'green'), ('stim_resp', 'I'), ('correct_resp', 'g')])]
    Routine trial
  LoopTerminator trials
  Routine thanks
